PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = solo_experiment
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'y','p','r','g'
      correctAns = $correct_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine ins
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Welcome
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  Routine thanks
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you
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Flow
  Routine ins
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = solo_condition.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'Joy', 'colour': 'yellow', 'stim_condition': 'C', 'correct_resp': 'y'},
      {'word': 'Love', 'colour': 'pink', 'stim_condition': 'C', 'correct_resp': 'p'},
      {'word': 'Sadness', 'colour': 'grey', 'stim_condition': 'C', 'correct_resp': 'g'},
      {'word': 'Anger', 'colour': 'red', 'stim_condition': 'C', 'correct_resp': 'r'},
      {'word': 'Joy ', 'colour': 'pink', 'stim_condition': 'I', 'correct_resp': 'p'},
      {'word': 'Joy', 'colour': 'grey', 'stim_condition': 'I', 'correct_resp': 'g'},
      {'word': 'Joy ', 'colour': 'red', 'stim_condition': 'I', 'correct_resp': 'r'},
      {'word': 'Love', 'colour': 'yellow', 'stim_condition': 'I', 'correct_resp': 'y'},
      {'word': 'Love', 'colour': 'grey', 'stim_condition': 'I', 'correct_resp': 'g'},
      {'word': 'Love', 'colour': 'red', 'stim_condition': 'I', 'correct_resp': 'r'},
      {'word': 'Sadness', 'colour': 'yellow', 'stim_condition': 'I', 'correct_resp': 'y'},
      {'word': 'Sadness', 'colour': 'pink', 'stim_condition': 'I', 'correct_resp': 'p'},
      {'word': 'Sadness', 'colour': 'red', 'stim_condition': 'I', 'correct_resp': 'r'},
      {'word': 'Anger', 'colour': 'yellow', 'stim_condition': 'I', 'correct_resp': 'y'},
      {'word': 'Anger', 'colour': 'pink', 'stim_condition': 'I', 'correct_resp': 'p'},
      {'word': 'Anger', 'colour': 'grey', 'stim_condition': 'I', 'correct_resp': 'g'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
